PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = flow
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Routines
  Routine trial
  Routine filter
  Routine fixation
    TextComponent fixationResp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine flanker
    ImageComponent image1
      image = None
      pos = (0, 0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent distract_img
      image = images/pop_1.png
      pos = (0.3, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        anchor_dict = dict([(2,0.052),(5,0.175),(8,0.33)])

        popstars = [
            "pop_1.png",
            "pop_2.png",
            "pop_3.png",
            "pop_4.png",
            "pop_5.png",
            "pop_6.png",
        ]

        politicians = [
            "pol_1.png",
            "pol_2.png",
            "pol_3.png",
            "pol_4.png",
            "pol_5.png",
            "pol_6.png",

        ]

        stock = [
        "stock_1.png",
        "stock_2.png",
        "stock_3.png",
        "stock_4.png",
        "stock_5.png",
        "stock_6.png",
        "stock_7.png"
        ]
      Before JS Experiment:
        anchor_dict = dict([[2, 0.052], [5, 0.175], [8, 0.33]]);
        popstars = ["pop_1.png", "pop_2.png", "pop_3.png", "pop_4.png", "pop_5.png", "pop_6.png"];
        politicians = ["pol_1.png", "pol_2.png", "pol_3.png", "pol_4.png", "pol_5.png", "pol_6.png"];
        stock = ["stock_1.png", "stock_2.png", "stock_3.png", "stock_4.png", "stock_5.png", "stock_6.png", "stock_7.png"];
      Begin JS Routine:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        target = randint(low = 0, high = load)
        png = ""
        stockSet = set()
        images = [
        image1,
        image2,
        image3,
        image4,
        image5,
        image6,
        image7,
        image8
        ]

        # if it is a popstar
        if (identity == "pop"):
            index = randint(low = 0, high = len(popstars) )
            png = popstars[index]

        # if it is a politician
        else:
            index = randint(low = 0, high = len(politicians) )
            png = politicians[index]

        def pos (index):
            return index * 0.1


        def setImage (file):
            return "images/" + file

        anchor = anchor_dict[load]


        #loops through load from 0, 1 ... load
        for i in range(load):
            cImage = images[i]
            cImage.pos = (0, anchor - pos(i))


            if i == target:
                cImage.image = setImage(png)
            else:
                index = randint(low = 0, high = len(stock))
                while stock[index] in stockSet:
                    index = randint(low = 0, high = len(stock))

                stockSet.add(stock[index])
                cImage.image = setImage(stock[index])


        if distractor == "inv":
            distract_img.ori = 180

        def setDist (l):
            index = randint(low = 0, high = len(l))

            while l[index] == png:
                index = randint(low = 0, high = len(l))
            distract_img.image = setImage(l[index])

        if congruency == "congruent":
            if identity == "pop":
                setDist(popstars)
            else:
                setDist(politicians)


        else:
            if identity == "pop":
                setDist(politicians)
            else:
                setDist(popstars)


        direction = randint(low = 0, high = 2)

        if direction == 0:
            distract_img.pos = (-0.3,0)
        else:
            distract_img.pos = (0.3,0)

         #Testing
        text.text = load
      End JS Routine:
        for (var image, _pj_c = 0, _pj_a = images, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            image = _pj_a[_pj_c];
            image.image = null;
            image.pos = [0, 0];
        }
      End Routine:
        for image in images:
            image.image = None
            image.pos = (0,0)

        distract_img.image = None
        distract_img.ori = 0
        distract_img.pos = (0,0)
  Routine breakScr
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the SPACE key to continue.
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    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent byeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The experiment is now complete.

        Thank you, and goodbye!
  Routine instructions
    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a set of faces in the middle of the screen.
        One (1) of these faces will either be a POLITICIAN or a POP STAR.

        If the face is a POLITICIAN, press the F key.
        If the face is a POP STAR, press the K key.

        You will also see a face o one side of the set.
        Please ignore this face as best as you can.

        At all times, please:
        - Keep your eyes fixed on the cross (+) at the center of the screen.
        - Respond as quickly and accurately as you can.

        Press the SPACE key to begin the experiment.
Flow
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'practice')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop'), ('correct', 'k')])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
      Routine fixation
      Routine flanker
    LoopTerminator trials
    Routine breakScr
  LoopTerminator blocks
  Routine goodbye
